PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 1024]
  expName = trainingNew
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Routines
  Routine trial
    KeyboardComponent resp
      allowedKeys = 'a', 'p'
      correctAns = $corrans
      forceEndRoutine = True
      startVal [condition] = 0.5
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine instruct
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be presented with an array of five images.

        Your task is to determine whether one of the people in the images is holding a gun.

        If the image is present, press the 'p' key.

        If it is absent, press the 'a' key.

        Try to respond quickly.

        Press space to continue.
    KeyboardComponent instrFinish
      allowedKeys = 'space' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Great we're all done!
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  Routine Welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent text_2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine blank500
    TextComponent text_3
      color = $[0.004,0.004,0.004]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = q
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Flow
  Routine Welcome
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_stimuli.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('ImageFile', 'Images/T1GN.png'), ('PresentAbsent', 'Present'), ('corrans', 'p'), ('Singleton', 'Absent')]),
      OrderedDict([('ImageFile', 'Images/T1GR.png'), ('PresentAbsent', 'Present'), ('corrans', 'p'), ('Singleton', 'Present')]),
      OrderedDict([('ImageFile', 'Images/T1NN.png'), ('PresentAbsent', 'Absent'), ('corrans', 'a'), ('Singleton', 'Absent')]),
      OrderedDict([('ImageFile', 'Images/T1NR.png'), ('PresentAbsent', 'Absent'), ('corrans', 'a'), ('Singleton', 'Present')]),
      OrderedDict([('ImageFile', 'Images/T2GN.png'), ('PresentAbsent', 'Present'), ('corrans', 'p'), ('Singleton', 'Absent')]),
      OrderedDict([('ImageFile', 'Images/T2GR.png'), ('PresentAbsent', 'Present'), ('corrans', 'p'), ('Singleton', 'Present')]),
      OrderedDict([('ImageFile', 'Images/T2NN.png'), ('PresentAbsent', 'Absent'), ('corrans', 'a'), ('Singleton', 'Absent')]),
      OrderedDict([('ImageFile', 'Images/T2NR.png'), ('PresentAbsent', 'Absent'), ('corrans', 'a'), ('Singleton', 'Present')]),
      OrderedDict([('ImageFile', 'Images/T3GN.png'), ('PresentAbsent', 'Present'), ('corrans', 'p'), ('Singleton', 'Absent')]),
      OrderedDict([('ImageFile', 'Images/T3GR.png'), ('PresentAbsent', 'Present'), ('corrans', 'p'), ('Singleton', 'Present')]),
      OrderedDict([('ImageFile', 'Images/T3NN.png'), ('PresentAbsent', 'Absent'), ('corrans', 'a'), ('Singleton', 'Absent')]),
      OrderedDict([('ImageFile', 'Images/T3NR.png'), ('PresentAbsent', 'Absent'), ('corrans', 'a'), ('Singleton', 'Present')])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
    Routine fixation
    Routine trial
    Routine blank500
  LoopTerminator trials
  Routine thanks
