PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 1024]
  expName = trainingNew
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Routines
  Routine trial
    ImageComponent image_2
      image [set every repeat] = $ImageFile
      size = (1,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'space','left','right',
      correctAns = $Corrans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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    TextComponent stimulus
      color = red
      letterHeight [set every repeat] = $Size
      startEstim = 0.5
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $Text
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  Routine instruct
    TextComponent instrText
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        An image will appear in the window on either the left or right side of the screen.

        If the image includes a weapon you should 'shoot it'. To do so press the left arrow key if the image is on the left, and the right arrow key if the image is on the right.

        You must respond AS QUICKLY AS POSSIBLE when there is a weapon present.

        You must NOT respond when there is no weapon.

        First you will get four practice trials....

        Press 'space' to continue.
    KeyboardComponent instrFinish
      allowedKeys = 'space' ,
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you!
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  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        This is a shoot/don't-shoot test

        There are 48 trials to complete

        Press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space' ,
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    TextComponent text_2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine blank500
    TextComponent text_3
      color = $[0.004,0.004,0.004]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine StaticPic
    ImageComponent image
      image [set every repeat] = $StaticIm
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine text_4
    TextComponent text_5
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        That is the end of the practice trials.

        You will now do the real trials.

        Press space when you are ready to continue...
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine instruct
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice_image_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Images/im2.png'), ('LeftRight', 'Left'), ('Gun', 'Absent'), ('Corrans', 'None'), ('Text', '+'), ('Volume', 0), ('StaticIm', 'Images/im1.png'), ('Size', 0.005)]),
      OrderedDict([('ImageFile', 'Images/im3.png'), ('LeftRight', 'Left'), ('Gun', 'Present'), ('Corrans', 'left'), ('Text', 'Too Slow!'), ('Volume', 1), ('StaticIm', 'Images/im1.png'), ('Size', 0.1)]),
      OrderedDict([('ImageFile', 'Images/im4.png'), ('LeftRight', 'Right'), ('Gun', 'Absent'), ('Corrans', 'None'), ('Text', '+'), ('Volume', 0), ('StaticIm', 'Images/im1.png'), ('Size', 0.005)]),
      OrderedDict([('ImageFile', 'Images/im5.png'), ('LeftRight', 'Right'), ('Gun', 'Present'), ('Corrans', 'right'), ('Text', 'Too Slow!'), ('Volume', 1), ('StaticIm', 'Images/im1.png'), ('Size', 0.1)])]
    Routine fixation
    Routine StaticPic
    Routine trial
    Routine blank500
  LoopTerminator practice_trials
  Routine text_4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_stimuli.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('ImageFile', 'Images/im2.png'), ('LeftRight', 'Left'), ('Gun', 'Absent'), ('Corrans', None), ('Text', []), ('Volume', 0), ('StaticIm', 'Images/im1.png'), ('Size', 0.0)]),
      OrderedDict([('ImageFile', 'Images/im3.png'), ('LeftRight', 'Left'), ('Gun', 'Present'), ('Corrans', 'left'), ('Text', 'Too Slow!'), ('Volume', 1), ('StaticIm', 'Images/im1.png'), ('Size', 0.2)]),
      OrderedDict([('ImageFile', 'Images/im4.png'), ('LeftRight', 'Right'), ('Gun', 'Absent'), ('Corrans', None), ('Text', []), ('Volume', 0), ('StaticIm', 'Images/im1.png'), ('Size', 0.0)]),
      OrderedDict([('ImageFile', 'Images/im5.png'), ('LeftRight', 'Right'), ('Gun', 'Present'), ('Corrans', 'right'), ('Text', 'Too Slow!'), ('Volume', 1), ('StaticIm', 'Images/im1.png'), ('Size', 0.2)]),
      OrderedDict([('ImageFile', 'Images/im6.png'), ('LeftRight', 'Left'), ('Gun', 'Absent'), ('Corrans', None), ('Text', []), ('Volume', 0), ('StaticIm', 'Images/im1.png'), ('Size', 0.0)]),
      OrderedDict([('ImageFile', 'Images/im7.png'), ('LeftRight', 'Left'), ('Gun', 'Absent'), ('Corrans', None), ('Text', []), ('Volume', 0), ('StaticIm', 'Images/im1.png'), ('Size', 0.0)]),
      OrderedDict([('ImageFile', 'Images/im8.png'), ('LeftRight', 'Right'), ('Gun', 'Absent'), ('Corrans', None), ('Text', []), ('Volume', 0), ('StaticIm', 'Images/im1.png'), ('Size', 0.0)])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
    Routine fixation
    Routine StaticPic
    Routine trial
    Routine blank500
  LoopTerminator trials
  Routine thanks
