PsychoPy2experiment version="2020.2.4"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1024, 768]
  expName = Flanker
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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    TextComponent stimuli
      color = $[1.000,1.000,1.000]
      letterHeight = 0.07
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $Primes
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    KeyboardComponent key_resp_trial
      allowedKeys = 'left', 'right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine reminder
    TextComponent text_reminder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        FINISHED!

        Thank you
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Instruction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Focus your attention on the middle arrow.

        Press 'right' arrow if the middle arrow points right
        > > > > >  or  < < >< <

        and the 'left' arrow if the middle arrow points left
        < < < < <   or   > > < > >



        Press any key to begin block
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be given 8 practice trials

        Press any key to continue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_3
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great!

        You will now complete the 60 test trials

        Try to respond as quickly as possible

        Press any key to continue
Flow
  Routine Instruction
  Routine practice
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = arrows.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('Condition', 'Con'), ('Primes', ' > > > > >'), ('CorrAns', 'right')]),
      OrderedDict([('Condition', 'Con'), ('Primes', ' < < < < <'), ('CorrAns', 'left')]),
      OrderedDict([('Condition', 'Incon'), ('Primes', ' > > < > >'), ('CorrAns', 'left')]),
      OrderedDict([('Condition', 'Incon'), ('Primes', ' < < > < < '), ('CorrAns', 'right')])]
    Routine trial
  LoopTerminator trials_2
  Routine trials_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = arrows.xlsx
    loopType = random
    nReps = 20
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    Routine trial
  LoopTerminator trials
  Routine reminder
